PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dialog = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = auditory_perception
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
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    TextComponent welcome_text
      letterHeight = 0.04
      startVal [time (s)] = 0
      wrapWidth = 1.5
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      text:
        歡迎參加本實驗

        您將聆聽一系列成對音檔 (A 和 B)
        請根據您的感受，按下對應數字鍵回答：

        (1) 只有 A 自然
        (2) 只有 B 自然
        (3) A 和 B 都自然
        (4) A 和 B 都不自然

        按【空白鍵】開始
    KeyboardComponent welcome_key
      allowedKeys = 'space'
      discardPrevious = True
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine trial
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    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text [set every repeat] = $trial_label
      wrapWidth = 1.5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import sound as ps_sound
      Begin Routine:
        sound_1 = ps_sound.Sound(sound1, sampleRate=44100, stereo=True, hamming=True)
        sound_2 = ps_sound.Sound(sound2, sampleRate=44100, stereo=True, hamming=True)
        sound_1_played = False
        sound_2_played = False
      Each Frame:
        t = routineTimer.getTime()

        if t >= 1.0 and not sound_1_played:
            sound_1.play()
            sound_1_played = True

        if t >= 2.5 and not sound_2_played:
            sound_2.play()
            sound_2_played = True
      End Routine:
        sound_1.stop()
        sound_2.stop()
    TextComponent text_2
      letterHeight = 0.045
      startVal [time (s)] = 3.5
      text [set every repeat] = $choices_text
      wrapWidth = 1.5
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4'
      discardPrevious = True
      forceEndRoutine = True
      startVal [time (s)] = 3.5
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  Routine block_break
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    TextComponent break_text
      letterHeight = 0.045
      startVal [time (s)] = 0
      text [set every repeat] = $break_msg
      wrapWidth = 1.5
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    KeyboardComponent break_key
      allowedKeys = 'space'
      discardPrevious = True
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      wrapWidth = 1.5
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      text:
        實驗結束，感謝您的參與！

        按任意鍵離開
    KeyboardComponent end_key
      discardPrevious = True
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine set_variable
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        from psychopy import prefs
        prefs.hardware['audioLib'] = ['sounddevice']
        prefs.hardware['audioSampleRate'] = 44100
      Begin Experiment:
        import sounddevice as sd
        print(sd.query_devices(kind='output'))
Flow
  Routine welcome
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = conditions_blocks.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_num': 1, 'block_file': 'conditions_block1.xlsx', 'break_msg': '第 1 段（共 6 段）\n\n按【空白鍵】開始'},
      {'block_num': 2, 'block_file': 'conditions_block2.xlsx', 'break_msg': '第 1 段結束，請稍作休息。\n\n準備好後按【空白鍵】繼續第 2 段（共 6 段）'},
      {'block_num': 3, 'block_file': 'conditions_block3.xlsx', 'break_msg': '第 2 段結束，請稍作休息。\n\n準備好後按【空白鍵】繼續第 3 段（共 6 段）'},
      {'block_num': 4, 'block_file': 'conditions_block4.xlsx', 'break_msg': '第 3 段結束，請稍作休息。\n\n準備好後按【空白鍵】繼續第 4 段（共 6 段）'},
      {'block_num': 5, 'block_file': 'conditions_block5.xlsx', 'break_msg': '第 4 段結束，請稍作休息。\n\n準備好後按【空白鍵】繼續第 5 段（共 6 段）'},
      {'block_num': 6, 'block_file': 'conditions_block6.xlsx', 'break_msg': '第 5 段結束，請稍作休息。\n\n準備好後按【空白鍵】繼續第 6 段（共 6 段）'}]
    Routine block_break
    LoopInitiator trials loopType="TrialHandler"
      conditions = $block_file
      conditionsFile = $block_file
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
